run("Export Current Image as XML/HDF5",
"  subsampling_factors=[{ {1,1,1}, {2,2,1}, {4,4,1}, {8,8,1}, {16,16,1}, {32,32,1}, {64,64,1}, {128,128,1}, {256,256,1}, {512,512,1}, {1024,1024,1}, {2048,2048,1}, {4096,4096,1}, {8192,8192,1}, {16384,16384,1}, {32768,32768,1}, {65536,65536,1}, {131072,131072,1}, {262144,262144,2} }] hdf5_chunk_sizes=[{ {512,512,1}, {512,512,1}, {512,512,1}, {256,256,1}, {256,256,1}, {256,256,1}, {128,128,1}, {128,128,1}, {128,128,1}, {64,64,1}, {64,64,1}, {64,64,1}, {64,64,1}, {64,32,2}, {32,32,4}, {32,32,4}, {32,16,8}, {16,16,16}, {16,16,16} }] value_range=[Use values specified below] min=0 max=65535 timepoints_per_partition=0 setups_per_partition=0 use_deflate_compression export_path=C:/Users/samrk/work_files/cortex_strip_1_bdv/cortex_strip_1.xml");